# 1 "/opt/topspin3.6.2/exp/stan/nmr/lists/pp/user/patz_gk_clipHSQC.SP"
;CLIP-HSQC
;mit geshapten pulsen fuer f2  

;invietgp
;avance-version (00/04/28)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer

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;######### AVANCE III shit ###########
"acqt0=0"
"in0=inf1/2"
;######################################


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"p2=p1*2"

"d0=3u"

"d4=1s/(cnst2*4)"
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"d11=30m"

"d13=4u"

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"DELTA=p16+d16+p2+d0*2"
"DELTA1=d4-p16-d13-4u-p30"


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; dimension 2D; AQ_mode  (F1) Echo-Antiecho
define delay MCWRK
define delay MCREST
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
"MCREST = d11 - d11"
"MCWRK = 0.166667*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
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2 MCWRK 
LBLSTS1, MCWRK  * 4
LBLF1, MCWRK pl0:f2
  MCREST
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  d1 
3 (p1 ph1)  	;special BIRD-element for removal of 1H not bound to 13C
  d4
  (center (p2 ph1) (p40:sp4 ph1):f2)
  d4
  (p1 ph2)
  4u
  p16:gp3
  d16
  (p40:sp4 ph1):f2
  (p1 ph2)
  d4
  (center (p2 ph1) (p40:sp4 ph1):f2)
  d4
  (p1 ph1)
  4u
  p16:gp4
  d16
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  (p1 ph1)
  d4 
  (center (p2 ph1) (p40:sp4 ph6):f2)
  d4 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  (p1 ph2) (p30:sp5 ph3):f2
  d0 
  p2 ph5
  d0
  p16:gp1*EA
  d16
  (p41:sp7 ph4):f2
  DELTA
  (ralign (p1 ph1) (p31:sp8 ph4):f2)
  d4
  (center (p2 ph1) (p40:sp4 ph1):f2)
  d13
  p16:gp2
  DELTA1 
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  (p30:sp5 ph8):f2 ;(p3 ph8):f2 ;(p30:sp5 ph8):f2
  go=2 ph31
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  MCWRK  wr #0 if #0 zd igrad EA
  lo to LBLSTS1 times 2
  MCWRK id0  MCWRK  ip3*2  MCWRK  ip6*2  MCWRK  ip31*2
  lo to LBLF1 times ST1CNT
  MCWRK rf #0
  lo to LBLAV times tdav
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exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph8=0 2
ph31=0 2 0 2 2 0 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl0 : 120dB
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p30: f2 channel exitacion pulse (bebop) (0/1)
;p31: f2 channel time reversed pulse (bebop_tr) (0/0)
;p40: f2 channel inversion pulse (bibop) (0/1)
;p41: f2 channel refocussing pulse (burbop180) (0/0.5)
;sp4: inversion pulse (bibop) (0/1)
;spnam4: inversion pulse (bibop) (0/1)
;sp5: exitacion pulse (bebop) (0/1)
;spnam5: exitacion pulse (bebop) (0/1)
;sp7: refocussing pulse (burbop180) (0/0.5)
;spnam7: refocussing pulse (burbop180) (0/0.5)
;sp8: time reversed pulse (bebop_tr) (0/0)
;spnam8: time reversed pulse (bebop_tr) (0/0)
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;NS: 1 * n
;DS: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
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;use gradient ratio:	gp 1 : gp 2
;			  80 : 20.1    for C-13
;			  80 :  8.1    for N-15

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SINE.100
;gpnam2: SINE.100
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;$Id: invietgp,v 1.6 2000/05/08 11:40:21 eng Exp $
